PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'timepoint': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = AliceBlue
  expName = prepost_ratings
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Routines
  Routine internal_state
    SliderComponent IS_slider
      color = Black
      forceEndRoutine = False
      granularity = 0
      saveStartStop = False
      size = (1000, 30)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = 0,1000
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    TextComponent ISlabel1
      color = MidnightBlue
      letterHeight = 25
      pos = (-500, -43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $LabelL
      wrapWidth = 400
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    TextComponent ISlabel2
      color = MidnightBlue
      letterHeight = 25
      pos = (500, -43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $LabelR
      wrapWidth = 400
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    TextComponent IS_text
      color = MidnightBlue
      letterHeight = 40
      pos = (0, 100)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Question
      wrapWidth = 1200
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    CodeComponent IS_code
      Code Type = Py
      Begin Routine:
        ##start and hide mouse
        mouse = event.Mouse(visible=False)

        ##start timer - uncomment if you want RTs
        #timer = core.Clock()

        ##marker display options
        IS_slider.marker.size=(.1,2)
        IS_slider.marker.color='Red'

        ##set initial mouse and marker positions
        mouse.setPos((-500,0))
        IS_slider.markerPos=0
      Each Frame:
        ##tie marker to mouse position
        x = mouse.getPos()[0]
        IS_slider.markerPos=500 + (x)

        ##write marker position and/or RT on click and end routine
        if mouse.getPressed()[0]:
            IS.addData('ISval', (IS_slider.markerPos / 10))
            #IS.adddata('ISval_RT', timer.getTime=())
            continueRoutine = False
      End Routine:
        ##take a nap to help prevent accidental double-clicks
        core.wait(0.5)
  Routine liking
    SliderComponent like_slider
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = 'Most disliked sensation imaginable','Dislike extremely','Dislike very much','Dislike moderately','Dislike slightly','Neutral','Like slightly','Like moderately','Like very much','Like extremely','Most liked sensation imaginable'
      pos = (500,0)
      saveStartStop = False
      size = (20,800)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = -100, -62.89, -41.58, -17.59, -5.92, 0, 6.25, 17.82, 44.43, 65.72, 100
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    TextComponent like_instructions
      color = Black
      letterHeight = 40
      pos = (-300, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How much do you like or dislike this taste?
      wrapWidth = 1000
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    CodeComponent like_code
      Code Type = Py
      Begin Routine:
        ##start and hide mouse
        mouse = event.Mouse(visible = False)

        ##start timer - uncomment if you want RTs
        #timer = core.Clock()

        ##marker display options
        like_slider.marker.size=(2,.1);
        like_slider.marker.color='Red';

        ##set initial mouse and marker positions
        mouse.setPos((0,0))
        like_slider.markerPos=0
      Each Frame:
        ##tie marker to mouse position
        x = mouse.getPos()[1]
        like_slider.markerPos=(x // 5)

        ##write marker position and/or RT on click and end routine
        if mouse.getPressed()[0]:
            trials.addData('Like', like_slider.markerPos)
            #trials.addData('Like_RT', timer.getTime=())
            continueRoutine = False
      End Routine:
        ##take a nap to help prevent accidental couble-clicks
        core.wait(0.5)
  Routine intense
    SliderComponent intense_slider
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = 'No sensation','Barely detectable', 'Weak', 'Moderate', 'Strong', 'Very strong', 'Strongest imaginable sensation of any kind'
      pos = (500,0)
      saveStartStop = False
      size = (20,800)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = 0, 1.4,6,17,35,51,100
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    TextComponent intense_instructions
      color = Black
      letterHeight = 40
      pos = (-300,0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How intense is this taste?
      wrapWidth = 1000
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    CodeComponent intense_code
      Code Type = Py
      Begin Routine:
        ###start and hide mouse
        mouse = event.Mouse(visible=False)

        ###start timer - uncomment if you want RTs
        #timer = core.Clock()

        ###marker display options
        intense_slider.marker.size=(2,.1);
        intense_slider.marker.color='Red';

        ###set initial mouse and marker positions
        mouse.setPos((0,0))
        intense_slider.markerPos=0
      Each Frame:
        ##tie marker to mouse position
        x = mouse.getPos()[1]
        intense_slider.markerPos=(x // 5)

        ##write marker position and/or RT on click and end routine
        if mouse.getPressed()[0]:
            trials.addData('Intense', intense_slider.markerPos)
            #trials.addData('Intense_RT', timer.getTime=())
            continueRoutine = False
      End Routine:
        ##take a nap to help prevent accidental double-clicks
        core.wait(0.5)
  Routine end
    TextComponent done
      color = Black
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You have completed the ratings :)
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  Routine taste_presentation
    TextComponent taste_pres
      color = lightgrey
      letterHeight = 60
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Taste
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    TextComponent text
      color = Black
      letterHeight = 40
      pos = (0, 100)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Experimenter: Send taste
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    KeyboardComponent trigger
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine familiar
    SliderComponent familiar_slider
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = 'Not familiar at all','More familiar than anything'
      saveStartStop = False
      size = (1000,30)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = (0,1000)
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    TextComponent familiar_question
      color = Black
      letterHeight = 40
      pos = (0, 100)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How familiar is this taste?
      wrapWidth = 1200
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    CodeComponent familiar_code
      Code Type = Py
      Begin Routine:
        ##start and hide mouse
        mouse = event.Mouse(visible=False)

        ##start timer - uncomment if you want RTs
        #timer = core.Clock()

        ##marker display options
        familiar_slider.marker.size=(.1,2)
        familiar_slider.marker.color='Red'

        ##set initial mouse and marker positions
        mouse.setPos((-500,0))
        familiar_slider.markerPos=0
      Each Frame:
        ##tie marker to mouse position
        x = mouse.getPos()[0]
        familiar_slider.markerPos= 500 + (x)

        ##write marker position and/or RT on click and end routine
        if mouse.getPressed()[0]:
            trials.addData('Familiar', (familiar_slider.markerPos / 10))
            #trials.addData('Familiar_RT', timer.getTime=())
            continueRoutine = False
      End Routine:
        ##take a nap to help prevent accidental double-clicks
        core.wait(0.5)
  Routine want
    SliderComponent want_slider
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = 'Do not want at all','Want more than anything'
      saveStartStop = False
      size = (1000,30)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = (0,1000)
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    TextComponent want_question
      color = Black
      letterHeight = 40
      pos = (0, 100)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How much do you want to eat this taste?
      wrapWidth = 1200
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    CodeComponent want_code
      Code Type = Py
      Begin Routine:
        ##start and hide mouse
        mouse = event.Mouse(visible=False)

        ##start timer - uncomment if you want RTs
        #timer = core.Clock()

        ##marker display options
        want_slider.marker.size=(.1,2)
        want_slider.marker.color='Red'

        ##set initial mouse and marker positions
        mouse.setPos((-500,0))
        want_slider.markerPos=0
      Each Frame:
        ##tie marker to mouse position
        x = mouse.getPos()[0]
        want_slider.markerPos= 500 + (x)

        ##write marker position and/or RT on click and end routine
        if mouse.getPressed()[0]:
            trials.addData('Want', (want_slider.markerPos / 10))
            #trials.addData('Want_RT', timer.getTime=())
            continueRoutine = False
      End Routine:
        ##take a nap to help prevent accidental double-clicks
        core.wait(0.5)
Flow
  LoopInitiator IS loopType="TrialHandler"
    conditionsFile = internal_states.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Question', 'How hungry are you right now?'), ('LabelL', 'Not hungry at all'), ('LabelR', 'More hungry than anything'), ('Quality', 'Hungry')]),
      OrderedDict([('Question', 'How full are you right now?'), ('LabelL', 'Not full at all'), ('LabelR', 'More full than anything'), ('Quality', 'Full')]),
      OrderedDict([('Question', 'How thirsty are you right now?'), ('LabelL', 'Not thirsty at all'), ('LabelR', 'More thirsty than anything'), ('Quality', 'Thirsty')]),
      OrderedDict([('Question', 'How anxious are you right now?'), ('LabelL', 'Not anxious at all'), ('LabelR', 'More anxious than anything'), ('Quality', 'Anxious')]),
      OrderedDict([('Question', 'How badly do you need to pee right now?'), ('LabelL', 'Not at all'), ('LabelR', 'More than anything'), ('Quality', 'Pee')])]
    Routine internal_state
  LoopTerminator IS
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = tastes.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Taste', 'ChocMilk')]),
      OrderedDict([('Taste', 'StrawMilk')]),
      OrderedDict([('Taste', 'Tless')])]
    Routine taste_presentation
    Routine intense
    Routine liking
    Routine familiar
    Routine want
  LoopTerminator trials
  Routine end
